PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'reward_serial_COM': 'none', 'wait_first_sec': '3', 'trans_pos_x': '-0.0234', 'trans_pos_y': '-0.02205', 'trans_size_x': '0.5', 'trans_size_y': '0.5', 'mouse_cursor': '0'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 900]
  color = $[-1,-1,-1]
  expName = BuilderProbabilisticReservalLearning-pp20220205
  keyboardBackend = ioHub
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Routines
  Routine init
    CodeComponent code
      Code Type = Py
      Before Experiment:
        import os
        curPass = os.getcwd();
        print(curPass);

        from BuilderSession import BuilderSession
        numOfSession=1;

        session = BuilderSession();
        session.ppEnv.codeFINISHED = FINISHED;
        session.ppEnv.codeSTARTED = STARTED;
    PolygonComponent polygon_t_init
      fillColor [set every frame] = blue
      lineColor [set every frame] = white
      saveStartStop = False
      shape = cross
      size = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine reward_test
    PolygonComponent polygon_reward_test
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 99999999
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    MouseComponent mouse_reward_test
      clickable = polygon_reward_test
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 99999999
      syncScreenRefresh = True
      timeRelativeTo = experiment
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    CodeComponent code_reward_test
      Code Type = Py
      Begin Routine:
        print("begin routine code_reward_test");
        mouse_reward_test.setVisible(int(expInfo['mouse_cursor']));
      End Routine:
        print("end routine code_reward_test");
        #currentTask.feeder.feed(1);
  Routine wait_first_blank
    PolygonComponent polygon_wait_first_blank
      fillColor = white
      saveStartStop = False
      shape = triangle
      size = (0.0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = float(expInfo['wait_first_sec']  )
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    CodeComponent code_wait_first_blank
      Code Type = Py
      Begin Routine:
        print("begin routine code_wait_first_blank");
      End Routine:
        print("end routine code_wait_first_blank");
  Routine init_task
    CodeComponent code_init_task
      Code Type = Py
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      Begin Experiment:
        from TaskProbabilisticReversalLearning import TaskProbabilisticReversalLearning

        session.init_session(win,expInfo);
        task = TaskProbabilisticReversalLearning(session, expInfo);
        session.set_task(task);
        #
        currentTask = session.getCurrentTask();
        currentTask.begin();
      End Experiment:
        currentTask.end();
  Routine warning_square
    PolygonComponent polygon_warning_square
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos [set every frame] = currentTask.seq_warning_square.warning_square.getXY()
      shape = rectangle
      size [set every frame] = currentTask.seq_warning_square.warning_square.getSize()
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = currentTask.seq_warning_square.warning_square.getDuration()
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    MouseComponent mouse_warning_square
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = currentTask.seq_warning_square.warning_square.getDuration()
      syncScreenRefresh = True
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    CodeComponent code_warning_square
      Code Type = Py
      Begin Routine:
        currentTask.curTrialValue.stim_distractor.x_pos = distractor_x_pos;
        currentTask.curTrialValue.stim_distractor.y_pos = distractor_y_pos;
        currentTask.curTrialValue.stim_distractor.x_size = distractor_x_size;
        currentTask.curTrialValue.stim_distractor.y_size = distractor_y_size;
        currentTask.curTrialValue.stim_target.x_pos = target_x_pos;
        currentTask.curTrialValue.stim_target.y_pos = target_y_pos;
        currentTask.curTrialValue.stim_target.x_size = target_x_size;
        currentTask.curTrialValue.stim_target.y_size = target_y_size;
        currentTask.curTrialValue.target_LR = target_LR;
        currentTask.curTrialValue.correct_LR = correct_LR;
        currentTask.curTrialValue.trial_name = trial_name;

        currentTask.initialize( trials);

        curSeq = currentTask.seq_warning_square;
        curSeq.warning_square.stim =polygon_warning_square;
        curSeq.mouse = mouse_warning_square;
        curSeq.blank.stim = polygon_warning_square_blank;
        curSeq.onBeginRoutine();

        if currentTask.time_over:
            continueRoutine = False;
      Each Frame:
        if continueRoutine:
            curSeq.onOneFrame(routineTimer.getTime());
        if not curSeq.isContinue() :
            continueRoutine = False;
            pass;
      End Routine:
        curSeq.onEndRoutine();
  Routine warning_square_blank
    PolygonComponent polygon_warning_square_blank
      fillColor [set every frame] = -1.0000, -1.0000, -1.0000
      lineColor [set every frame] = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = currentTask.seq_warning_square.blank.getDuration()
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    CodeComponent code_warning_square_blank
      Code Type = Py
      Begin Routine:
        if currentTask.time_over:
            continueRoutine = False;
  Routine reward_ITI
    PolygonComponent polygon_reward_ITI
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = currentTask.seq_reward_ITI.blank.getDuration()
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    CodeComponent code_reward_ITI
      Code Type = Py
      Begin Routine:
        curSeq = currentTask.seq_reward_ITI;
        curSeq.blank.stim = polygon_reward_ITI;
        curSeq.onBeginRoutine();
      Each Frame:
        curSeq.onOneFrame(routineTimer.getTime());
        if not curSeq.isContinue() :
            continueRoutine = False;
            pass;
      End Routine:
        curSeq.onEndRoutine();
  Routine extra_ITI
    PolygonComponent polygon_extra_ITI
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = currentTask.seq_extra_ITI.blank.getDuration()
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    CodeComponent code_extra_ITI
      Code Type = Py
      Begin Routine:
        curSeq = currentTask.seq_extra_ITI;
        curSeq.blank.stim = polygon_extra_ITI;
        curSeq.onBeginRoutine();
      Each Frame:
        curSeq.onOneFrame(routineTimer.getTime());
        if not curSeq.isContinue() :
            continueRoutine = False;
            pass;
      End Routine:
        curSeq.onEndRoutine();
  Routine wait_last_blank
    PolygonComponent polygon_wait_last_blank
      fillColor = white
      pos [set every frame] = (0, 0)
      shape = rectangle
      size [set every frame] = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 99999999
      units = norm
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    MouseComponent mouse_wait_last_blank
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 99999999
      syncScreenRefresh = True
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    CodeComponent code_wait_last_blank
      Code Type = Py
      Before Experiment:
        from LibWin.MouseExit import MouseExit
      Begin Experiment:
        mouseExit = MouseExit(win);
      Begin Routine:
        mouse_wait_last_blank.setVisible(int(expInfo['mouse_cursor']));
        mouseExit.eventMouse = mouse_wait_last_blank;
      Each Frame:
        flagExit = mouseExit.oneFrame();
        if flagExit:
            continueRoutine = False;
            pass;
  Routine stimuli_AB
    ImageComponent image_stimuli_A
      image [set every repeat] = $'resouce/image/' + target_image
      pos [set every frame] = curSeq.target.getXY()
      size [set every frame] = curSeq.target.getSize()
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = curSeq.target.getDuration()
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    ImageComponent image_stimuli_B
      image [set every repeat] = $'resouce/image/' + dist_image
      pos [set every frame] = curSeq.distractor.getXY()
      size [set every frame] = curSeq.distractor.getSize()
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = curSeq.distractor.getDuration()
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    PolygonComponent polygon_stimuli_AP
      disabled = True
      fillColor = white
      pos [set every frame] = currentTask.seq_stimulus_pair.target.getXY()
      shape = rectangle
      size [set every frame] = currentTask.seq_stimulus_pair.target.getSize()
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = currentTask.seq_stimulus_pair.target.getDuration()
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    PolygonComponent polygon_stimuli_BP
      disabled = True
      fillColor = white
      pos [set every frame] = currentTask.seq_stimulus_pair.distractor.getXY()
      shape = rectangle
      size [set every frame] = currentTask.seq_stimulus_pair.distractor.getSize()
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = currentTask.seq_stimulus_pair.distractor.getDuration()
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    MouseComponent mouse_stimuli_AB
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = curSeq.target.getDuration()
      syncScreenRefresh = True
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    CodeComponent code_stimuli_AB
      Code Type = Py
      Begin Routine:
        curSeq = currentTask.seq_stimuli_AB;
        curSeq.target.stim     = image_stimuli_A;
        curSeq.distractor.stim = image_stimuli_B;
        curSeq.mouse = mouse_stimuli_AB;
        curSeq.onBeginRoutine();

        if currentTask.time_over:
            continueRoutine = False;
      Each Frame:
        if continueRoutine:
            curSeq.onOneFrame(routineTimer.getTime());
        if not curSeq.isContinue() :
            continueRoutine = False;
            pass;
      End Routine:
        curSeq.onEndRoutine();
Flow
  Routine init
  Routine reward_test
  Routine wait_first_blank
  LoopInitiator trials_session loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_loop loopType="TrialHandler"
      conditions = [OrderedDict([('TRIAL', 1), ('target_image', 'A.png'), ('dist_image', 'B.png')])]
      conditionsFile = PRL_trial_loop.csv
      loopType = sequential
      nReps = 1
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      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = PRL_block_loop.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('target_x_pos', -0.39), ('target_y_pos', 0), ('target_x_size', 1), ('target_y_size', 1), ('distractor_x_pos', 0.39), ('distractor_y_pos', 0), ('distractor_x_size', 1), ('distractor_y_size', 1), ('target_LR', 'L'), ('correct_LR', 'L'), ('trial_name', 'T_L_C_L_80_PERCENT')]),
          OrderedDict([('target_x_pos', -0.39), ('target_y_pos', 0), ('target_x_size', 1), ('target_y_size', 1), ('distractor_x_pos', 0.39), ('distractor_y_pos', 0), ('distractor_x_size', 1), ('distractor_y_size', 1), ('target_LR', 'L'), ('correct_LR', 'L'), ('trial_name', 'T_L_C_L_80_PERCENT')]),
          OrderedDict([('target_x_pos', -0.39), ('target_y_pos', 0), ('target_x_size', 1), ('target_y_size', 1), ('distractor_x_pos', 0.39), ('distractor_y_pos', 0), ('distractor_x_size', 1), ('distractor_y_size', 1), ('target_LR', 'L'), ('correct_LR', 'L'), ('trial_name', 'T_L_C_L_80_PERCENT')]),
          OrderedDict([('target_x_pos', -0.39), ('target_y_pos', 0), ('target_x_size', 1), ('target_y_size', 1), ('distractor_x_pos', 0.39), ('distractor_y_pos', 0), ('distractor_x_size', 1), ('distractor_y_size', 1), ('target_LR', 'L'), ('correct_LR', 'L'), ('trial_name', 'T_L_C_L_80_PERCENT')]),
          OrderedDict([('target_x_pos', -0.39), ('target_y_pos', 0), ('target_x_size', 1), ('target_y_size', 1), ('distractor_x_pos', 0.39), ('distractor_y_pos', 0), ('distractor_x_size', 1), ('distractor_y_size', 1), ('target_LR', 'L'), ('correct_LR', 'L'), ('trial_name', 'T_L_C_L_80_PERCENT')])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
        Routine init_task
        Routine warning_square
        Routine warning_square_blank
        Routine stimuli_AB
        Routine reward_ITI
        Routine extra_ITI
      LoopTerminator trials
    LoopTerminator trials_loop
    Routine wait_last_blank
  LoopTerminator trials_session
